PsychoPy2experiment version="2023.1.0"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['Pseudonym'], expName, expInfo['date'])
  Experiment info = {'Pseudonym': '$participant_id'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 0
  Units = height
  Use version = 2023.1.0
  Window size (pixels) = [2056, 1329]
  expName = rdk-discrimination
  keyboardBackend = PsychToolbox
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Routines
  Routine Instruction
    TextComponent instruction_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment.

        In the following you will solve a series of tasks. You will be presented with a circle full of dots. Some of these dots will be moving to either the left or to the right. Your task is to decide in which direction they are moving.

        Press the [ F key ] if you think the dots are moving to the left, or the [ J key] if you think they are moving the right.

        Before the dots appear, you will see an arrow on the screen indicating the more probable direction of motion. If the arrow points to the right, the dots are more likely to move to the right than to the left, and vice versa.

        Please always focus on the small cross on the screen, if nothing else is presented, and try to respond as quickly as possible.

        Press [ space ] to start with some practice runs when you're ready.
    KeyboardComponent instruction_keyboard_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Dots
    CodeComponent dots_set_direction
      Code Type = Py
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      Begin Routine:
        if direction == "right":
            dots_direction = 0
        elif direction == "left":
            dots_direction = 180
    PolygonComponent dots_background
      durationEstim = 1.5
      fillColor = black
      lineColor = black
      shape = circle
      size = (0.75, 0.75)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 90
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    DotsComponent dots_stimulus
      coherence = 0.08
      dir [set every repeat] = dots_direction
      dotLife = 3
      dotSize = 3
      durationEstim = 1.5
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.75
      nDots = 250
      noiseDots = walk
      refreshDots = repeat
      signalDots = same
      speed = 0.0125
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 90
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    KeyboardComponent dots_keyboard_response
      allowedKeys = 'f','j'
      durationEstim = 1.5
      forceEndRoutine = True
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 90
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  Routine Feedback
    CodeComponent feedback_set_text
      Code Type = Py
      Begin Routine:
        # If the participant did not respond at all, set the response text to 'miss'.
        # You can figure that out by checking whether the given response 'None'.
        # 'None' in Python means a values is not defined, so when
        # dots_main_keyboard_resp.keys is 'None' we know the participant did not respond.
        if dots_keyboard_response.keys is None:
            response_text = "miss"

        # If the response time (rt) was shorter than 100ms, set the response text to
        # 'too fast' (like Mulder et al., 2012 did).
        # You can get the response time from the Keyboard component that was used to
        # capture the response (name_of_the_keyboard_component.rt).
        elif dots_keyboard_response.rt <= 0.1:
            response_text = "too fast"

        # If the response time was between 100ms and 1500ms (i.e. it was valid), give
        # feedback. If the repsonse was also correct, set the response text to '+5 points',
        # if it was wrong, set the response text to '+0 points'.
        # The variable 'direction' is a loop variable storing the stimulus direction for
        # the current trial.
        else:
            if (direction == "left" and dots_keyboard_response.keys == "f" or
                direction == "right" and dots_keyboard_response.keys == "j"
            ):
                response_text = "+5 points"
            else:
                response_text = "+0 points"
    TextComponent feedback_text
      letterHeight = 0.07
      pos = (0, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $response_text
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  Routine Cue
    CodeComponent cue_set_text
      Code Type = Py
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      Begin Routine:
        # Here we set which cue is displayed (a cue is just a text symbol). We check the
        # content of the loop variable 'cue', and decide if the cue text should be an
        # arrow pointing the left, an arrow pointing to the right or just a circle.
        if cue == "left":
            cue_path = "img/arrow_left.png"
        elif cue == "right":
            cue_path = "img/arrow_right.png"
        elif cue == "none":
            cue_path = "img/neutral.png"
    ImageComponent image
      durationEstim = 1
      image [set every repeat] = $cue_path
      size = (0.2, 0.1)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 60
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  Routine Fixation_pre_cue
    CodeComponent fixation_pre_set_duration
      Code Type = Py
      Begin Routine:
        # Before the fixation cross (the one before the cue) is displayed, randomly
        # choose a duration for it. Since we are using seconds as time unit, these
        # numbers correspond to 100ms, 350ms, 800ms and 1200ms.
        fixation_duration_pre_cue = randchoice([0.1, 0.35, 0.8, 1.2])
    TextComponent fixation_pre
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_duration_pre_cue
      text = +
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  Routine Fixation_post_cue
    CodeComponent fixation_post_set_duration
      Code Type = Py
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      Begin Routine:
        # Before the fixation cross (the one after the cue) is displayed, randomly
        # choose a duration for it. Since we are using seconds as time unit, these
        # numbers correspond to 3400ms, 4000ms, 4500ms and 5000ms.
        fixation_duration_post_cue = randchoice([3.4, 4, 4.5, 5])
    TextComponent fixation_post
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixation_duration_post_cue
      text = +
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  Routine Debriefing
    TextComponent debriefing_text
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation!

        Press [ space ] to end the experiment.
    KeyboardComponent debriefing_keyboard_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instruction_Main
    TextComponent instruction_main_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        We are now finished with the practice runs and will proceed to the main experiment.

        Please try to respond as quickly as possible.

        Press [ space ] to start the main experiment.
    KeyboardComponent instruction_main_keyboard_response
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ISI
    StaticComponent static_isi
      durationEstim = 1
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 60
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  Routine participant_id
    CodeComponent code
      Code Type = Py
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      Before Experiment:
        import time, string, random

        # sample 3 uppercase letters
        letters = np.random.choice(list(string.ascii_uppercase), 3)
        # convert characters into string
        letters = ''.join(letters)

        # take timestamp in seconds and convert to milliseconds
        timestamp = round(time.time() * 1000)
        # remove first 6 digits
        timestamp = int(str(timestamp)[6:])
        # concatenate letters and timestamp to create unique ID
        participant_id = letters + str(timestamp)
Flow
  Routine participant_id
  Routine Instruction
  LoopInitiator practice_block_loop loopType="TrialHandler"
    conditionsFile = conditions_practice.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')]),
      OrderedDict([('cue', 'left'), ('direction', 'right')]),
      OrderedDict([('cue', 'right'), ('direction', 'left')]),
      OrderedDict([('cue', 'none'), ('direction', 'left')]),
      OrderedDict([('cue', 'none'), ('direction', 'right')])]
    Routine ISI
    Routine Fixation_pre_cue
    Routine Cue
    Routine Fixation_post_cue
    Routine Dots
    Routine Feedback
  LoopTerminator practice_block_loop
  Routine Instruction_Main
  LoopInitiator main_blocks_loop loopType="TrialHandler"
    conditionsFile = conditions.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'left'), ('direction', 'left')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')]),
      OrderedDict([('cue', 'right'), ('direction', 'right')])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
    Routine ISI
    Routine Fixation_pre_cue
    Routine Cue
    Routine Fixation_post_cue
    Routine Dots
    Routine Feedback
  LoopTerminator main_blocks_loop
  Routine Debriefing
